CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:w*_xy(?P<Well>[0-9]{2})_reg
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

RunCellpose:[module_num:5|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notes:["Segment the cell's cytoplasm (this is used for counting cells, restricting the search for granules to cells only to avoid incorrect granule identification, and to associate granules to the cells."]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
    Select the input image:GFP
    Expected object diameter:72
    Detection mode:cyto2
    Name the output object:Cells
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
    Select the nuclei image:Nuclei
    Save probability image?:No
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    Location of the pre-trained model file:Default Input Folder sub-folder|Downloads
    Pre-trained model file name:SGI_High_Contrast
    Flow threshold:0.6
    Cell probability threshold:-3
    GPU memory share for each worker:0.0833
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Z rescaling factor (anisotropy):1.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

MaskImage:[module_num:6|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notes:['Isolate only the identified cells to be used for granule identification.']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
    Select the input image:GFP
    Name the output image:Masked_GFP
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:7|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notes:['Disabled for now, could help with identifying dim granules, but creates noise and false granules, so its off for now.']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enabled:False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
    Select the input image:Masked_GFP
    Name the output image:Enhanced_GFP
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Slow
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
RunCellpose:[module_num:8|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notes:['Find the granules within the cells identified by cellpose.', '', 'Note: Be sure to check that the location of the pretrained model is correct!']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
    Select the input image:Masked_GFP
    Expected object diameter:8
    Detection mode:custom
    Name the output object:Grans
    Use GPU:Yes
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|C:\\
    Pre-trained model file name:SGI_High_Contrast
    Flow threshold:0.5
    Cell probability threshold:0
    GPU memory share for each worker:0.0833
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:1
    Z rescaling factor (anisotropy):1.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

TrackObjects:[module_num:9|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notes:['Track the cellpose identified cells.']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
    Choose a tracking method:Follow Neighbors
    Select the objects to track:Cells
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:No
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    Filter objects by lifetime?:No
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    Average cell diameter in pixels:70
    Use advanced configuration parameters:No
    Cost of cell to empty matching:15.0
    Weight of area difference in function matching cost:25.0

RelateObjects:[module_num:10|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notes:['Associate granules found with the cells they were found in.']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
    Parent objects:Cells
    Child objects:Grans
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:CellsAndGrans
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
TrackObjects:[module_num:11|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notes:['Track the cellpose identified granules that were within the cells.']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
    Choose a tracking method:LAP
    Select the objects to track:Grans
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    Select display option:Color and Number
    Save color-coded image?:No
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    Select the movement model:Both
    Number of standard deviations for search radius:3.0
    Search radius limit, in pixel units (Min,Max):4,8
    Run the second phase of the LAP algorithm?:No
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    Filter objects by lifetime?:No
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
MeasureObjectSizeShape:[module_num:12|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notes:['Measure the features of granules.']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
    Select object sets to measure:Cells, Grans
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:13|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notes:["Measure the granule's intensity using the cellpose masks on the origional image."]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
    Select images to measure:GFP, Masked_GFP
    Select objects to measure:Cells, Grans

ExportToSpreadsheet:[module_num:14|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notes:['Make sure to check the output sub-folder for the data! ', 'You will want to add ', '\\XY Well', 'to the path. ', 'Add "well" by right clicking on the text box and a dropdown menu will appear, click "Well". ', '"Well" will appear as being highlighted green, but "\\XY " is manually typed in.', "Be careful as the cursor does not alway match where the text shows up. Use the keyboard's left and right arrows to identify where you're adding text. It's critical to have the folder where the data ends up to be have no spaces before XY and a space between XY and WELL."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|M:\\Notebooks\\Nick DeCuzzi\\Papers\\TF paper with Jessica\\Experiments\\2022-12-28 4Bjb14\\XY \g<Well>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cells|AreaShape_HuMoment_3,Cells|AreaShape_HuMoment_6,Cells|AreaShape_HuMoment_4,Cells|AreaShape_HuMoment_1,Cells|AreaShape_HuMoment_0,Cells|AreaShape_HuMoment_2,Cells|AreaShape_HuMoment_5,Cells|AreaShape_SpatialMoment_0_2,Cells|AreaShape_SpatialMoment_0_0,Cells|AreaShape_SpatialMoment_0_1,Cells|AreaShape_SpatialMoment_0_3,Cells|AreaShape_SpatialMoment_1_2,Cells|AreaShape_SpatialMoment_1_1,Cells|AreaShape_SpatialMoment_1_3,Cells|AreaShape_SpatialMoment_1_0,Cells|AreaShape_SpatialMoment_2_1,Cells|AreaShape_SpatialMoment_2_0,Cells|AreaShape_SpatialMoment_2_2,Cells|AreaShape_SpatialMoment_2_3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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