CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:w*_xy(?P<Well>[0-9]{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

RunCellpose:[module_num:5|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notes:["Segment the cell's cytoplasm (this is used for counting cells, restricting the search for granules to cells only to avoid incorrect granule identification, and to associate granules to the cells."]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
    Select the input image:GFP
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:225
    Detection mode:cyto2
    Name the output object:Cells
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
    Select the nuclei image:Nuclei
    Save probability image?:No
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    Location of the pre-trained model file:Default Input Folder sub-folder|Downloads
    Pre-trained model file name:SGI_High_Contrast
    Flow threshold:0.5
    Cell probability threshold:0
    GPU memory share for each worker:0.25
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:30
    Use Omnipose for mask reconstruction:1.0
    Invert images:No
    Remove objects that are touching the edge?:Yes

MaskImage:[module_num:6|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notes:['Isolate only the identified cells to be used for granule identification.']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
    Select the input image:GFP
    Name the output image:Masked_GFP
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:7|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notes:['Disabled for now, could help with identifying dim granules, but creates noise and false granules, so its off for now.']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enabled:False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
    Select the input image:Masked_GFP
    Name the output image:Enhanced_GFP
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Slow
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
RunCellpose:[module_num:8|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notes:['Find the granules within the cells identified by cellpose.', '', 'Note: Be sure to check that the location of the pretrained model is correct!']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
    Select the input image:Masked_GFP
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:12
    Detection mode:custom
    Name the output object:Grans
    Use GPU:Yes
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|C:\\
    Pre-trained model file name:SGI_High_Contrast
    Flow threshold:0.55
    Cell probability threshold:0
    GPU memory share for each worker:0.125
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:1
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:No

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP
    Name the output image:Cells_and_Grans
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Cells
    Select outline color:Green
    Select objects to display:Grans

TrackObjects:[module_num:10|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notes:['Track the cellpose identified cells.']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
    Choose a tracking method:Follow Neighbors
    Select the objects to track:Cells
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:No
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    Filter objects by lifetime?:No
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    Average cell diameter in pixels:35.0
    Use advanced configuration parameters:No
    Cost of cell to empty matching:15.0
    Weight of area difference in function matching cost:25.0

TrackObjects:[module_num:11|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notes:['Track the cellpose identified granules that were within the cells.']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enabled:False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
    Choose a tracking method:LAP
    Select the objects to track:Grans
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    Select display option:Color and Number
    Save color-coded image?:No
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    Select the movement model:Both
    Number of standard deviations for search radius:3.0
    Search radius limit, in pixel units (Min,Max):1,5
    Run the second phase of the LAP algorithm?:No
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    Filter objects by lifetime?:No
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
MeasureObjectSizeShape:[module_num:12|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notes:['Measure the features of granules.']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
    Select object sets to measure:Cells, Grans
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:13|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notes:["Measure the granule's intensity using the cellpose masks on the origional image."]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
    Select images to measure:GFP
    Select objects to measure:Cells, Grans

RelateObjects:[module_num:14|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notes:['Associate granules found with the cells they were found in.']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
    Parent objects:Cells
    Child objects:Grans
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:15|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notes:['Make sure to check the output sub-folder for the data! ', 'You will want to add ', '\\XY Well', 'to the path. ', 'Add "well" by right clicking on the text box and a dropdown menu will appear, click "Well". ', '"Well" will appear as being highlighted green, but "\\XY " is manually typed in.', "Be careful as the cursor does not alway match where the text shows up. Use the keyboard's left and right arrows to identify where you're adding text. It's critical to have the folder where the data ends up to be have no spaces before XY and a space between XY and WELL."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\albecklab.mcb.ucdavis.edu\\data\\Processed Data\\SG_4B\\2023-05-03 4B-WT 4B-Mut Tet curve NaAsO2 curve\\XY \g<Well>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cells|Location_CenterMassIntensity_X_GFP,Cells|Location_CenterMassIntensity_Z_GFP,Cells|Location_CenterMassIntensity_Y_GFP,Cells|Location_MaxIntensity_X_GFP,Cells|Location_MaxIntensity_Y_GFP,Cells|Location_MaxIntensity_Z_GFP,Cells|Location_Center_X,Cells|Location_Center_Y,Cells|Location_Center_Z,Cells|Mean_Grans_AreaShape_MedianRadius,Cells|Mean_Grans_AreaShape_MeanRadius,Cells|Mean_Grans_AreaShape_Area,Cells|Mean_Grans_Intensity_MeanIntensity_GFP,Cells|Mean_Grans_Intensity_MaxIntensity_GFP,Cells|Mean_Grans_Intensity_MedianIntensity_GFP,Cells|Mean_Grans_Location_Center_Y,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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