CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:OPP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:G3BP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Series

RunCellpose:[module_num:5|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notes:["Segment the cell's cytoplasm (this is used for counting cells, restricting the search for granules to cells only to avoid incorrect granule identification, and to associate granules to the cells."]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
    Select the input image:GFP
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:75
    Detection mode:cyto2
    Name the output object:Cells
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:Yes
    Select the nuclei image:Nuclei
    Save probability image?:No
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    Location of the pre-trained model file:Default Input Folder sub-folder|Downloads
    Pre-trained model file name:SGI_High_Contrast
    Flow threshold:0.5
    Cell probability threshold:-1
    GPU memory share for each worker:0.125
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Use Omnipose for mask reconstruction:1.0
    Invert images:No
    Remove objects that are touching the edge?:No

MaskImage:[module_num:6|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notes:['Isolate only the identified cells to be used for granule identification.']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enabled:False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
    Select the input image:OPP
    Name the output image:Cell_OPP
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

RunCellpose:[module_num:7|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notes:['Find the 4b-gfp granules within the cells identified by cellpose.', '', 'Note: Be sure to check that the location of the pretrained model is correct!']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
    Select the input image:GFP
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:7
    Detection mode:custom
    Name the output object:Grans_4B
    Use GPU:Yes
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Default Input Folder|C:\\
    Pre-trained model file name:SGI_High_Contrast
    Flow threshold:0.55
    Cell probability threshold:-1
    GPU memory share for each worker:0.125
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:1
    Use Omnipose for mask reconstruction:1.0
    Invert images:No
    Remove objects that are touching the edge?:No

RunCellpose:[module_num:8|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notes:['Find the G3BP1 (orange) granules within the cells identified by cellpose.', '', 'Note: Be sure to check that the location of the pretrained model is correct!']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
    Select the input image:G3BP1
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:7
    Detection mode:custom
    Name the output object:Grans_G3BP1
    Use GPU:Yes
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Default Input Folder|C:\\
    Pre-trained model file name:SGI_High_Contrast
    Flow threshold:0.4
    Cell probability threshold:0
    GPU memory share for each worker:0.125
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:2
    Use Omnipose for mask reconstruction:1.0
    Invert images:No
    Remove objects that are touching the edge?:No

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:G3BP1
    Name the output image:GRANSfound
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Grans_G3BP1
    Select outline color:Green
    Select objects to display:Grans_4B
    Select outline color:Blue
    Select objects to display:Cells

MeasureObjectSizeShape:[module_num:10|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notes:['Measure the features of granules.']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
    Select object sets to measure:Cells, Grans_4B, Grans_G3BP1
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

ImageMath:[module_num:11|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:correct_OPP
    Image or measurement?:Image
    Select the first image:OPP
    Multiply the first image by:65535
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    Image or measurement?:Image
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
MeasureObjectIntensity:[module_num:12|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notes:['Measure GFP and OPP intensity of whole cell']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
    Select images to measure:GFP, OPP, correct_OPP
    Select objects to measure:Cells

MeasureObjectIntensity:[module_num:13|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notes:['Measure GFP and G3BP1 intensity of granules found using the G3BP1 masks.']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
    Select images to measure:G3BP1, GFP
    Select objects to measure:Grans_G3BP1

MeasureObjectIntensity:[module_num:14|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notes:['Measure GFP and G3BP1 intensity of granules found using the 4b granule masks.']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
    Select images to measure:G3BP1, GFP
    Select objects to measure:Grans_4B

RelateObjects:[module_num:15|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notes:['Associate 4b-GFP granules found with the cells they were found in.']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
    Parent objects:Cells
    Child objects:Grans_4B
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:16|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notes:['Associate G3BP1-GFP granules found with the cells they were found in.']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
    Parent objects:Cells
    Child objects:Grans_G3BP1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:17|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notes:['Overlay the 4b and g3bp1 granules found onto the cells identified.']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP
    Name the output image:gransoncells
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Grans_G3BP1
    Select outline color:Green
    Select objects to display:Grans_4B
    Select outline color:Blue
    Select objects to display:Cells

DisplayScatterPlot:[module_num:18|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
    Type of measurement to plot on X-axis:Object
    Select the object to plot on the X-axis:Cells
    Select the measurement to plot on the X-axis:Children_Grans_G3BP1_Count
    Type of measurement to plot on Y-axis:Object
    Select the object to plot on the Y-axis:Cells
    Select the measurement to plot on the Y-axis:Intensity_MeanIntensity_correct_OPP
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:OPP intensity vs Num G3BP1 Grans

DisplayScatterPlot:[module_num:19|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
    Type of measurement to plot on X-axis:Object
    Select the object to plot on the X-axis:Cells
    Select the measurement to plot on the X-axis:Children_Grans_4B_Count
    Type of measurement to plot on Y-axis:Object
    Select the object to plot on the Y-axis:Cells
    Select the measurement to plot on the Y-axis:Intensity_MeanIntensity_correct_OPP
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:OPP intensity vs Num 4B Grans

ExportToSpreadsheet:[module_num:20|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notes:['Make sure to check the output sub-folder for the data! ', 'You will want to add ', '\\XY Well', 'to the path. ', 'Add "well" by right clicking on the text box and a dropdown menu will appear, click "Well". ', '"Well" will appear as being highlighted green, but "\\XY " is manually typed in.', "Be careful as the cursor does not alway match where the text shows up. Use the keyboard's left and right arrows to identify where you're adding text. It's critical to have the folder where the data ends up to be have no spaces before XY and a space between XY and WELL."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|D:\\2023-06-29\\IF out\\XY \g<Series>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Grans_G3BP1|Intensity_StdIntensity_GFP,Grans_G3BP1|Intensity_StdIntensity_G3BP1,Grans_G3BP1|Intensity_IntegratedIntensityEdge_GFP,Grans_G3BP1|Intensity_IntegratedIntensityEdge_G3BP1,Grans_G3BP1|Intensity_MaxIntensity_GFP,Grans_G3BP1|Intensity_MaxIntensity_G3BP1,Grans_G3BP1|Intensity_StdIntensityEdge_GFP,Grans_G3BP1|Intensity_StdIntensityEdge_G3BP1,Grans_G3BP1|Intensity_MaxIntensityEdge_GFP,Grans_G3BP1|Intensity_MaxIntensityEdge_G3BP1,Grans_G3BP1|Intensity_UpperQuartileIntensity_GFP,Grans_G3BP1|Intensity_UpperQuartileIntensity_G3BP1,Grans_G3BP1|Intensity_MeanIntensityEdge_G3BP1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:21|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Elsewhere...|D:\\2023-06-29\\if_db
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:data.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cells
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object view
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
    Select the plate metadata:ChannelName
    Select the well metadata:Series
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:2023-06-29_dapi_4B_G3BP1_OPP
    Which objects should be used for locations?:Cells
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Data and schema
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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