CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelName "GFP_Live")
    Name to assign these images:FourB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "ORANGE")
    Name to assign these images:G3BP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "BFP")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "CY5")
    Name to assign these images:OPP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RunCellpose:[module_num:5|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notes:["Segment the cell's cytoplasm (this is used for counting cells, restricting the search for granules to cells only to avoid incorrect granule identification, and to associate granules to the cells."]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
    Select the input image:FourB
    Expected object diameter:75
    Detection mode:cyto2
    Name the output object:Cells
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:Yes
    Select the nuclei image:Nuclei
    Save probability image?:No
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    Location of the pre-trained model file:Default Input Folder sub-folder|Downloads
    Pre-trained model file name:SGI_High_Contrast
    Flow threshold:0.5
    Cell probability threshold:-1
    GPU memory share for each worker:0.125
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Z rescaling factor (anisotropy):1.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

MaskImage:[module_num:6|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notes:['Isolate only the identified cells to be used for 4B granule identification.']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
    Select the input image:FourB
    Name the output image:Masked_4B
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:7|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notes:['Isolate only the identified cells to be used for G3BP1 granule identification.']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
    Select the input image:G3BP1
    Name the output image:Masked_G3BP1
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:8|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notes:['Isolate only the identified cells to be used for OPP Measurement']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
    Select the input image:OPP
    Name the output image:Masked_OPP
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

RunCellpose:[module_num:9|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notes:['Find the 4B granules within the cells identified by cellpose.', '', 'Note: Be sure to check that the location of the pretrained model is correct!']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
    Select the input image:Masked_4B
    Expected object diameter:7
    Detection mode:custom
    Name the output object:Grans_4B
    Use GPU:Yes
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|D:\\
    Pre-trained model file name:SGI_High_Contrast
    Flow threshold:0.38
    Cell probability threshold:-1
    GPU memory share for each worker:0.125
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:2
    Z rescaling factor (anisotropy):1.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

RunCellpose:[module_num:10|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notes:['Find the G3BP1 granules within the cells identified by cellpose.', '', 'Note: Be sure to check that the location of the pretrained model is correct!']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
    Select the input image:Masked_G3BP1
    Expected object diameter:7
    Detection mode:custom
    Name the output object:Grans_G3BP1
    Use GPU:Yes
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|D:\\
    Pre-trained model file name:SGI_High_Contrast
    Flow threshold:0.28
    Cell probability threshold:1
    GPU memory share for each worker:0.125
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:2
    Z rescaling factor (anisotropy):1.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

MeasureObjectSizeShape:[module_num:11|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notes:['Measure the features of granules.']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
    Select object sets to measure:Cells, Grans_4B, Grans_G3BP1
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:12|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notes:["Measure the 4B granule's intensity using the cellpose masks on the origional image."]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
    Select images to measure:Masked_4B
    Select objects to measure:Grans_4B

MeasureObjectIntensity:[module_num:13|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notes:["Measure the G3BP1 granule's intensity using the cellpose masks on the origional image."]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
    Select images to measure:Masked_G3BP1
    Select objects to measure:Grans_G3BP1

MeasureObjectIntensity:[module_num:14|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notes:["Measure the OPP's intensity using the cellpose masks on the origional image."]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
    Select images to measure:Masked_OPP
    Select objects to measure:Cells

RelateObjects:[module_num:15|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notes:['Associate 4B granules found with the cells they were found in.']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
    Parent objects:Cells
    Child objects:Grans_4B
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:16|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notes:['Associate G3BP1 granules found with the cells they were found in.']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
    Parent objects:Cells
    Child objects:Grans_G3BP1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Masked_4B
    Name the output image:EverythingOnGFP
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FF80
    Select objects to display:Cells
    Select outline color:cyan
    Select objects to display:Grans_4B
    Select outline color:red
    Select objects to display:Grans_G3BP1

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:G3BP1
    Name the output image:EverythingOnRFP
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FF80
    Select objects to display:Cells
    Select outline color:cyan
    Select objects to display:Grans_4B
    Select outline color:red
    Select objects to display:Grans_G3BP1

ExportToSpreadsheet:[module_num:19|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notes:['Make sure to check the output sub-folder for the data! ', 'You will want to add ', '\\XY Well', 'to the path. ', 'Add "well" by right clicking on the text box and a dropdown menu will appear, click "Well". ', '"Well" will appear as being highlighted green, but "\\XY " is manually typed in.', "Be careful as the cursor does not alway match where the text shows up. Use the keyboard's left and right arrows to identify where you're adding text. It's critical to have the folder where the data ends up to be have no spaces before XY and a space between XY and WELL."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\2023-06-29\\Live_IF\\
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cells|Mean_Grans_G3BP1_AreaShape_Zernike_8_0,Cells|Mean_Grans_G3BP1_AreaShape_Zernike_8_4,Cells|Mean_Grans_G3BP1_AreaShape_Zernike_8_8,Cells|Mean_Grans_G3BP1_AreaShape_Zernike_8_2,Cells|Mean_Grans_G3BP1_AreaShape_Zernike_8_6,Cells|Mean_Grans_G3BP1_AreaShape_Zernike_4_2,Cells|Mean_Grans_G3BP1_AreaShape_Zernike_4_4,Cells|Mean_Grans_G3BP1_AreaShape_Zernike_4_0,Cells|Mean_Grans_G3BP1_AreaShape_Zernike_3_3,Cells|Mean_Grans_G3BP1_AreaShape_Zernike_3_1,Cells|Mean_Grans_G3BP1_AreaShape_Zernike_6_2,Cells|Mean_Grans_G3BP1_AreaShape_Zernike_6_0,Cells|Mean_Grans_G3BP1_AreaShape_Zernike_6_4,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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